PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = config_feat_task
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Routines
  Routine feat_face_trials
    ImageComponent target_image1
      image [set every repeat] = $target
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    StaticComponent ISI_1
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
      syncScreenRefresh = True
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    ImageComponent probe_image1
      image [set every repeat] = $probe
      size = (0.5,0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    KeyboardComponent key_resp1
      allowedKeys = 'd','s'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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    CodeComponent randomize_trials1
      Code Type = Auto->JS
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      Begin Routine:
        trial_order = np.concatenate((permutation([1,2,3,4,5,6]),
                                      permutation([1,2,3,4,5,6]),
                                      permutation([1,2,3,4,5,6]),
                                      permutation([1,2,3,4,5,6])))
        trial_order = np.round(trial_order/6 - 0.1)

        trialSame = np.concatenate((permutation([0,1,2,3]),
                                    permutation([0,1,2,3]),
                                    permutation([0,1,2,3])))

        trialDiff = np.array([(0,1), (0,2), (0,3),
                              (1,2), (1,3), (1,0),
                              (2,3), (2,0), (2,1),
                              (3,0), (3,1), (3,2)])

        diffTrial = list(range(1,13))
        shuffle(diffTrial)

        corrAns = []
        for trial in trial_order:
            if trial==1:
                ans = 's'
            else:
                ans = 'd'
            corrAns.append(ans)
  Routine feat_haus_trials
    ImageComponent target_image4
      image [set every repeat] = $target
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
      units = deg
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    ImageComponent probe_image4
      image [set every repeat] = $probe
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
      units = deg
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    StaticComponent ISI_4
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
      syncScreenRefresh = True
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    KeyboardComponent key_resp4
      allowedKeys = 'd','s'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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    CodeComponent randomize_trials4
      Code Type = Auto->JS
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      Begin Routine:
        trial_order = np.concatenate((permutation([1,2,3,4,5,6]),
                                      permutation([1,2,3,4,5,6]),
                                      permutation([1,2,3,4,5,6]),
                                      permutation([1,2,3,4,5,6])))
        trial_order = np.round(trial_order/6 - 0.1)

        trialSame = np.concatenate((permutation([0,1,2,3]),
                                    permutation([0,1,2,3]),
                                    permutation([0,1,2,3])))

        trialDiff = np.array([(0,1), (0,2), (0,3),
                              (1,2), (1,3), (1,0),
                              (2,3), (2,0), (2,1),
                              (3,0), (3,1), (3,2)])

        diffTrial = list(range(1,13))
        shuffle(diffTrial)

        corrAns = []
        for trial in trial_order:
            if trial==1:
                ans = 's'
            else:
                ans = 'd'
            corrAns.append(ans)
  Routine config_haus_trials
    ImageComponent target_image2
      image [set every repeat] = $target
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent probe_image2
      image [set every repeat] = $probe
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
      units = deg
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    StaticComponent ISI_2
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
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    KeyboardComponent key_resp2
      allowedKeys = 'd','s'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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    CodeComponent randomize_trials2
      Code Type = Auto->JS
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      Begin Routine:
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  Routine config_face_trials
    ImageComponent target_image3
      image [set every repeat] = $target
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
      units = deg
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    ImageComponent probe_image3
      image [set every repeat] = $probe
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
      units = deg
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    StaticComponent ISI_3
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
      syncScreenRefresh = True
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    KeyboardComponent key_resp3
      allowedKeys = 's','d'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.7
      storeCorrect = True
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    CodeComponent randomize_trials3
      Code Type = Auto->JS
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      Begin Routine:
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  Routine start_haus_instructions
    TextComponent haus_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press S for same or D for different houses. Press <SPACE> to continue.
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    KeyboardComponent start_run2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_face_instructions
    TextComponent face_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press S for same or D for different faces. Press <SPACE> to continue.
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    KeyboardComponent start_exp_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_exp
    CodeComponent save_stim_paths
      Code Type = Auto->JS
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      Before Experiment:
        stim_feat_dir = os.path.abspath('stimuli/Featural_Set/')
        stim_config_dir = os.path.abspath('stimuli/Spacing_Set/')
        feat_paths = [stim_feat_dir + '/' + file for file in os.listdir(stim_feat_dir) if file.endswith(".tif")]
        feat_paths.sort()
        config_paths = [stim_config_dir + '/' + file for file in os.listdir(stim_config_dir) if file.endswith(".tif")]
        config_paths.sort()
Flow
  Routine start_exp
  LoopInitiator runs loopType="TrialHandler"
    loopType = fullRandom
    nReps = 2
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    LoopInitiator instr_and_trial1 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine start_face_instructions
      LoopInitiator feat_face_loop loopType="TrialHandler"
        conditionsFile = trials24.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('trialNum', 0)]),
          OrderedDict([('trialNum', 1)]),
          OrderedDict([('trialNum', 2)]),
          OrderedDict([('trialNum', 3)]),
          OrderedDict([('trialNum', 4)]),
          OrderedDict([('trialNum', 5)]),
          OrderedDict([('trialNum', 6)]),
          OrderedDict([('trialNum', 7)]),
          OrderedDict([('trialNum', 8)]),
          OrderedDict([('trialNum', 9)]),
          OrderedDict([('trialNum', 10)]),
          OrderedDict([('trialNum', 11)]),
          OrderedDict([('trialNum', 12)]),
          OrderedDict([('trialNum', 13)]),
          OrderedDict([('trialNum', 14)]),
          OrderedDict([('trialNum', 15)]),
          OrderedDict([('trialNum', 16)]),
          OrderedDict([('trialNum', 17)]),
          OrderedDict([('trialNum', 18)]),
          OrderedDict([('trialNum', 19)]),
          OrderedDict([('trialNum', 20)]),
          OrderedDict([('trialNum', 21)]),
          OrderedDict([('trialNum', 22)]),
          OrderedDict([('trialNum', 23)])]
        Routine feat_face_trials
      LoopTerminator feat_face_loop
    LoopTerminator instr_and_trial1
    LoopInitiator instr_and_trial2 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine start_haus_instructions
      LoopInitiator conf_haus_loop loopType="TrialHandler"
        conditionsFile = trials24.csv
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('trialNum', 0)]),
          OrderedDict([('trialNum', 1)]),
          OrderedDict([('trialNum', 2)]),
          OrderedDict([('trialNum', 3)]),
          OrderedDict([('trialNum', 4)]),
          OrderedDict([('trialNum', 5)]),
          OrderedDict([('trialNum', 6)]),
          OrderedDict([('trialNum', 7)]),
          OrderedDict([('trialNum', 8)]),
          OrderedDict([('trialNum', 9)]),
          OrderedDict([('trialNum', 10)]),
          OrderedDict([('trialNum', 11)]),
          OrderedDict([('trialNum', 12)]),
          OrderedDict([('trialNum', 13)]),
          OrderedDict([('trialNum', 14)]),
          OrderedDict([('trialNum', 15)]),
          OrderedDict([('trialNum', 16)]),
          OrderedDict([('trialNum', 17)]),
          OrderedDict([('trialNum', 18)]),
          OrderedDict([('trialNum', 19)]),
          OrderedDict([('trialNum', 20)]),
          OrderedDict([('trialNum', 21)]),
          OrderedDict([('trialNum', 22)]),
          OrderedDict([('trialNum', 23)])]
        Routine config_haus_trials
      LoopTerminator conf_haus_loop
    LoopTerminator instr_and_trial2
    LoopInitiator instr_and_trial3 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine start_face_instructions
      LoopInitiator conf_face_loop loopType="TrialHandler"
        conditionsFile = trials24.csv
        loopType = sequential
        nReps = 1
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        conditions:
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        Routine config_face_trials
      LoopTerminator conf_face_loop
    LoopTerminator instr_and_trial3
    LoopInitiator instr_and_trial4 loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine start_haus_instructions
      LoopInitiator feat_haus_loop loopType="TrialHandler"
        conditionsFile = trials24.csv
        loopType = sequential
        nReps = 1
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        conditions:
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        Routine feat_haus_trials
      LoopTerminator feat_haus_loop
    LoopTerminator instr_and_trial4
  LoopTerminator runs
