PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = configural_featural
  logging level = debug
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Routines
  Routine start_instr
    TextComponent start_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press S for same or D for different faces. Press <SPACE> to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test
    ImageComponent image
      image = stimuli/Featural_Set/f15.tif
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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  Routine feat_face_trials
    ImageComponent target_image
      image [set every repeat] = $target
      size = (0.25,0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent probe_image
      image [set every repeat] = $probe
      size = (0.25,0.25)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','s'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.2
      storeCorrect = True
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    StaticComponent ISI
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.3
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  Routine feat_haus_trials
  Routine config_haus_trials
Flow
  Routine start_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = image_stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('target', 'stimuli/Featural_Set/f15.tif'), ('probe', 'stimuli/Featural_Set/f15.tif'), ('corrAns', 's')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f142.tif'), ('probe', 'stimuli/Featural_Set/f142.tif'), ('corrAns', 's')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f131.tif'), ('probe', 'stimuli/Featural_Set/f24.tif'), ('corrAns', 'd')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f24.tif'), ('probe', 'stimuli/Featural_Set/f15.tif'), ('corrAns', 'd')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f131.tif'), ('probe', 'stimuli/Featural_Set/f15.tif'), ('corrAns', 'd')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f142.tif'), ('probe', 'stimuli/Featural_Set/f24.tif'), ('corrAns', 'd')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f24.tif'), ('probe', 'stimuli/Featural_Set/f24.tif'), ('corrAns', 's')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f142.tif'), ('probe', 'stimuli/Featural_Set/f15.tif'), ('corrAns', 'd')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f131.tif'), ('probe', 'stimuli/Featural_Set/f131.tif'), ('corrAns', 's')]),
      OrderedDict([('target', 'stimuli/Featural_Set/f142.tif'), ('probe', 'stimuli/Featural_Set/f131.tif'), ('corrAns', 'd')])]
    Routine feat_face_trials
  LoopTerminator trials
  Routine config_haus_trials
  Routine feat_haus_trials
