PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = configural_VS_featural
  logging level = debug
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Routines
  Routine trial
    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        if trial_order[trials.thisN] == 1:
            target = (paths[trialSame[sameTrialid]])
            probe = (paths[trialSame[sameTrialid]])
            sameTrialid += 1
        elif trial_order[trials.thisN] == 0:
            img_pair = trialDiff[diffTrial[diffTrialid]]
            target = (paths[img_pair[0]])
            probe = (paths[img_pair[1]])
            diffTrialid += 1

        #int(trials.trialList['trialNum'])
    ImageComponent target_image
      image [set every repeat] = $target
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
      units = deg
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    TextComponent fixation
      letterHeight = 0.02
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
      text = +
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    ImageComponent probe_image
      image [set every repeat] = $probe
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
      units = deg
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    TextComponent fix_response
      letterHeight = 0.02
      startVal [time (s)] = 0.7
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 's','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.7
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    KeyboardComponent fix_change_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine block_instruction
    CodeComponent block_code
      Code Type = Auto->JS
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      Begin Routine:
        if thisBlock['Block_type'] == 'conf_face':
            paths = face_config_paths
        elif thisBlock['Block_type'] == 'conf_haus':
            paths = haus_config_paths
        elif thisBlock['Block_type'] == 'feat_face':
            paths = face_feat_paths
        elif thisBlock['Block_type'] == 'feat_haus':
            paths = haus_feat_paths

        trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]), permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
        trial_order = np.round(trial_order / 6 - 0.1)
        trialSame = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
        trialDiff = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
        diffTrial = list(range(12))
        shuffle(diffTrial)

        sameTrialid = 0
        diffTrialid = 0

        instruction_text = thisBlock['instruction_text']
    TextComponent instructions
      letterHeight = 0.1
      startVal [time (s)] = 0
      text [set every repeat] = $instruction_text
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    KeyboardComponent start_block
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp_code_setup
    CodeComponent exp_setup
      Code Type = Auto->JS
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      Before Experiment:
        from numpy.random import permutation

        stim_feat_dir = os.path.abspath('stimuli/Featural_Set/')
        stim_config_dir = os.path.abspath('stimuli/Spacing_Set/')
        face_feat_paths = [stim_feat_dir + '/' + file for file in os.listdir(stim_feat_dir) if file.endswith(".tif")]
        face_feat_paths.sort()
        face_config_paths = [stim_config_dir + '/' + file for file in os.listdir(stim_config_dir) if file.endswith(".tif")]
        face_config_paths.sort()
        haus_feat_paths = [stim_feat_dir + '/' + file for file in os.listdir(stim_feat_dir) if file.endswith(".bmp")]
        haus_feat_paths.sort()
        haus_config_paths = [stim_config_dir + '/' + file for file in os.listdir(stim_config_dir) if file.endswith(".bmp")]
        haus_config_paths.sort()
Flow
  Routine exp_code_setup
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = block_types_A.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Block_type', 'conf_face'), ('instruction_text', 'Press S for same or D for different faces. Press <SPACE> to continue.')]),
      OrderedDict([('Block_type', 'conf_haus'), ('instruction_text', 'Press S for same or D for different houses. Press <SPACE> to continue.')]),
      OrderedDict([('Block_type', 'feat_face'), ('instruction_text', 'Press S for same or D for different faces. Press <SPACE> to continue.')]),
      OrderedDict([('Block_type', 'feat_haus'), ('instruction_text', 'Press S for same or D for different houses. Press <SPACE> to continue.')])]
    Routine block_instruction
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 24
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      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
