PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = configural_featural
  logging level = debug
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Routines
  Routine start_instr
    TextComponent start_instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press S for same or D for different faces. Press <SPACE> to continue.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test
    ImageComponent image
      image = stimuli/Featural_Set/f15.tif
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      texture resolution = 512
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  Routine feat_face_trials
    ImageComponent target_image
      image [set every repeat] = $target
      size = (0.25,0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    ImageComponent probe_image
      image [set every repeat] = $probe
      size = (0.25,0.25)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','s'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.7
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    StaticComponent ISI
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
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  Routine feat_haus_trials
  Routine config_haus_trials
  Routine config_face_trials
Flow
  Routine start_instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials24.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialNum', 0)]),
      OrderedDict([('trialNum', 1)]),
      OrderedDict([('trialNum', 2)]),
      OrderedDict([('trialNum', 3)]),
      OrderedDict([('trialNum', 4)]),
      OrderedDict([('trialNum', 5)]),
      OrderedDict([('trialNum', 6)]),
      OrderedDict([('trialNum', 7)]),
      OrderedDict([('trialNum', 8)]),
      OrderedDict([('trialNum', 9)]),
      OrderedDict([('trialNum', 10)]),
      OrderedDict([('trialNum', 11)]),
      OrderedDict([('trialNum', 12)]),
      OrderedDict([('trialNum', 13)]),
      OrderedDict([('trialNum', 14)]),
      OrderedDict([('trialNum', 15)]),
      OrderedDict([('trialNum', 16)]),
      OrderedDict([('trialNum', 17)]),
      OrderedDict([('trialNum', 18)]),
      OrderedDict([('trialNum', 19)]),
      OrderedDict([('trialNum', 20)]),
      OrderedDict([('trialNum', 21)]),
      OrderedDict([('trialNum', 22)]),
      OrderedDict([('trialNum', 23)])]
    Routine feat_face_trials
  LoopTerminator trials
  Routine config_haus_trials
  Routine config_face_trials
  Routine feat_haus_trials
